
//
// Image Converter Macro for ImageJ
//
//
//

//
// log_level
// 1: debug
// 2: info
// 3: warn
// 4: error
// 5: fatal
//
var log_level = 1;

// for logging
function log_debug(str){
  if( log_level <= 1 ){
    nowstr = logtimestr();
    print(nowstr + ":debug: " + str);
  }
}
function logtimestr(){
  year = 0;
  month = 0;
  dayOfWeek = 0;
  dayOfMonth = 0;
  hour = 0;
  minute = 0;
  second = 0;
  msec = 0;
  getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
  retStr = "" + year + "/" + month + "/" + dayOfMonth + " " + hour + ":" + minute + ":" + second;
  return retStr;
}
function log_info(str){
  if( log_level <= 2){
    nowstr = logtimestr();
    print(nowstr + ":info: " + str);
  }
}
function log_warn(str){
  if( log_level <= 3){
    nowstr = logtimestr();
    print(nowstr + ":warn: " + str);
  }
}
function log_error(str){
  if( log_level <= 4){
    nowstr = logtimestr();
    print(nowstr + ":error: " + str);
  }
}
function log_fatal(str){
  if( log_level <= 5){
    nowstr = logtimestr();
    print(nowstr + ":fatal: " + str);
  }
}
function debug_wait(sec){
  if( log_level <= 1 && sec > 0){
    wait(sec * 1000);
  }
}
function info_wait(sec){
  if( log_level <= 2 && sec > 0){
    wait(sec * 1000);
  }
}

function find_recursive_dir(dir, recursive){
  log_debug("find_recursive_dir(): " + dir);
  list = getFileList(dir);
  //print_array(list, 22);
  if( list.length == 0){
    return newArray(0);
  }
  current_dir_file_list = newArray(0);
  for(i=0; i<list.length; i++){
    if(startsWith(list[i], ".")){
      // .obsolute とかスキップする.
    } else if(endsWith(list[i], "/") ){
      if(recursive){
        current_dir_file_list = merge_array(current_dir_file_list, find_recursive_dir(""+dir+list[i], recursive));
      }
    } else {
      if(endsWith(list[i], ".tif") || endsWith(list[i], ".tiff") || endsWith(list[i], ".TIF") || endsWith(list[i], ".TIFF") ){
        current_dir_file_list = pushArray(current_dir_file_list, "" + dir + list[i]);
      }
    }
  }
  return Array.sort(current_dir_file_list);
}

// push arg to Array
// This function calls newArray() whenever it adds a file.
// It may affect the performance of this macro.
function pushArray(ary, item){
  return_array = newArray(ary.length + 1);
  for(i = 0; i < ary.length; i++){
    //log_debug("pushArray(): pushing arg = " + ary[i]);
    return_array[i] = ary[i];
  }
  log_debug("pushArray(): pushing last arg = " + item);
  return_array[ary.length] = item;
  return return_array;
}

// merge ary1 and ary2
// This function calls newArray() whenever it merge arrays.
// It may affect the performance of this macro.
function merge_array(ary1, ary2){
  return_array = newArray(ary1.length + ary2.length);
  for(i = 0; i < ary1.length; i++){
    log_debug("added ary[" + i + "] = " + ary1[i]);
    return_array[i] = ary1[i];
  }
  for(i = 0; i < ary2.length; i++){
    log_debug("added ary[" + (ary1.length + i) + "] = " + ary2[i]);
    return_array[ary1.length + i] = ary2[i];
  }
  //print_array(return_array, 10);
  return return_array;
}

function print_array(array, position){
  if(array.length == 0){
    //print(array);
    print(position + ": array is 0");
    return;
  }
  print(position + ": array.length = " + array.length);
  for(i=0; i < array.length; i++){
    print(position + ": array[" + i + "] = " + array[i]);
  }
}

//
// Unused...
function compact_array(array){
  array_size = 0;
  for(i = 0; i < array.length; i++){
    print("loop " + i);
    if(array[i] != 0){ // If array[i] has anything.
      array_size ++;
    }
  }
  return_array = newArray(array_size);
  index = 0;
  for(i = 0; i < array.length; i++){
    if(array[i] != 0){
      return_array[index] = array[i];
      index ++;
    }
  }
  return return_array;
}


function parse_param(file){
  if(!File.exists(file)){
    log_debug("file not found: " + file);
    return false;
  }
  filestring = File.openAsString(file);
  rows = split(filestring, "\n");
  scan_condition = newArray(4); // (x nm, y nm, time ms, z nm)
  for(i=0; i < scan_condition.length; i++){
    scan_condition[i] = false;
  }
  for(i=0; i < rows.length; i++){
    log_debug("rows[" + i + "] = " + rows[i]);
    if( matches(rows[i], "[^:]*:[^:]*") ){
      columns = split(rows[i], ":");
      tag = replace(replace(columns[0], "^  *", ""), "  *$", "");
      val = replace(replace(columns[1], "^  *", ""), "  *$", "");
      log_debug("tag = " + tag);
      log_debug("val = " + val);
      if( matches(tag, "^Ch1 height range.*$") ){
        scan_condition[3] = val;
      } else if( matches(tag, "^X scan size.*$") ){
        scan_condition[0] = val;
      } else if( matches(tag, "^Y scan size.*$") ){
        scan_condition[1] = val;
      } else if( matches(tag, "^Frame time.*$") ){
        scan_condition[2] = val;
      }
    }
  }
  return scan_condition;
}

// do convert
// tone[0]: min, tone[1]: max, tone[2]: color
// format: tiff, jpeg, gif, png
function convert(src, dst, format, background, contrast){
  param_file = replace(src, "_1ch_", "_Par_");
  param_file = replace(param_file, "\\.(tiff|TIFF|tif|TIF)", ".txt");

  params = parse_param(param_file);
  for(i=0;i < params.length; i++){
    if(params[i] == false){
      log_debug("params[" + i + "] = false");
      return false;
    }
  }
  for(i=0; i < params.length; i++){
    log_debug("params[" + i + "] = " + params[i]);
  }


  dst = replace(dst, "\\.(tif|TIF|tiff|TIFF)$", "_x" + params[0] + "y" + params[1] + "t" + params[2] + "z" + params[3] + ".tif" );

  id = open_image(src);
  //log_debug("getInfo(image.subtitle) = " + getInfo("image.subtitle"));
  if( background ){
    run("Subtract Background...", "rolling=50");
  }
  if( contrast ){
    run("Enhance Contrast", "saturated=0.35");
  }

  //colorID = getColorID(src);
  //if( matches(colorID, ".*Blue.*" ) ){
  //  run("Blue");
  //}
  //if( matches(colorID, ".*Red.*" ) ){
  //  run("Red");
  //}


  //run("RGB Color");

  // remove last file seperater
  //dst_dir = replace(dst_dir, "[\\/\\\\]$", "");
  if( format == "tiff" ){
    dst = replace(dst, "\\.(tif|TIF|tiff|TIFF)$", "_8bit.tif");
    run("8-bit");
  } else if( format == "jpeg" ){
    dst = replace(dst, "\\.(tif|TIF|tiff|TIFF)$", ".jpg");
  } else if( format == "gif" ){
    dst = replace(dst, "\\.(tif|TIF|tiff|TIFF)$", ".gif");
  } else if( format == "png" ){
    dst = replace(dst, "\\.(tif|TIF|tiff|TIFF)$", ".png");
  } else {
    log_fatal("Enter unexpected code!!");
  }
  log_debug("parent directory: " + File.getParent(dst));
  mkdir_p(File.getParent(dst));

  log_info("convert from " + src);
  log_info("convert to   " + dst);
  //log_debug("ColorID = " + getColorID(src));
  saveAs(format, dst);
  close_image(id);
}

function close_all_images() {
  while(nImages > 0 ){
    log_debug("nImages = " + nImages);
    close();
  }
}

// if include the string match regexp, return color as string.
// Input must be string array, which is "color_id:color_name"
// example.
// regexp = "^NIBA"
// array[0] = "NIBA:green"
// return = green
function getColor(array, regexp){
  for(i=0; i<array.length; i++){
    if(matches(array[i], regexp){
      return replace(array[i], regexp, "");
    }
  }
  return "";
}
// get color from path
function getColorID(path){
  fname = getFileNameWithoutExtension(path);
  instrument = getInstrument(path);
  if( instrument == "CellaView" ){
    // the matching is not exact.
    return replace(fname, "[A-Z][0-9]+--W[0-9]+--P[0-9]+--Z[0-9]+--T[0-9]+--", "" );
  } else if (instrument == "IX" ){
    // the matching is not exact.
    return replace(fname, ".+_w[0-9]+", "");
  } else {
    return "";
  }
}

// return file name without directory and extension.
function getFileNameWithoutExtension(path){
  fname = File.getName(path);
  fname = replace(fname, "\\.[^.]+$", "");
  return fname;
}

// return capture instrument, IX or cellaview. This function distinguishes
// the instrument by the file name.
function getInstrument(path){
  fname = getFileNameWithoutExtension(path);
  if( matches(fname, "[A-Z][0-9]+--W[0-9]+--P[0-9]+--Z[0-9]+--T[0-9]+--.*" ) ){
    log_debug("Match Cellaview!! " + fname);
    return "CellaView";
  } else if( matches(fname, ".*_w[0-9](NIBA|WIGA|BF|NUA|WBV|NUA|CFP|RFP)")){
    log_debug("Match IX!! " + fname);
    return "IX";
  } else {
    log_error("Cannot determine the filter type:" + fname);
    return "";
  }
}


// creat directory recursively.
function mkdir_p(directory){
  // directory already exists, return
  if( File.isDirectory(directory)){
    return;
  }
  // if 'directory' is not directory, error.
  if( File.exists(directory)){
    log_error(directory + " is not directory. Stop macro.");
    exit(directory + " is not directory. Stop macro.");
  }
  // if parent directory does not exist, create it
  if(! File.isDirectory(File.getParent(directory))){
    mkdir_p(File.getParent(directory));
  }
  // create directory.
  log_debug("creat directory " + directory);
  File.makeDirectory(directory);
}

function close_window(title){
  selectWindow(title);
  run("Close");
}

function open_image(path){
  open(path);
  list = getList("image.titles");
  if( list.length == 0 ){
    return false;
  }
  id = getImageID();
  if(isOpen(id)){
    id = getImageID();
    name = File.getName(path);
    name = remove_special_chars(name);
    rename(name);
  }
  return id;
}

function remove_special_chars(string){
  ret = string;
  ret = replace(ret, " ", "_");
  ret = replace(ret, "[\\[\\]\\(\\)\\{\\};:\\+\\*\\$\\#\"\\&\'\\|\\!]", "_");
  ret = replace(ret, "__*", "_");
  ret = replace(ret, "_-_", "_");
  ret = replace(ret, "_\\.", ".");
  return ret;
}

function close_image(id){
  selectImage(id);
  if( isOpen(id) ){
    close();
  }
}

/*
function measureRGB(){
  if (bitDepth!=24)
     exit("This macro requires an RGB image");
  setRGBWeights(1, 0, 0);
  run("Measure");
  setResult("Label", nResults-1, "Red");
  setRGBWeights(0, 1, 0);
  run("Measure");
  setResult("Label", nResults-1, "Green");
  setRGBWeights(0, 0, 1);
  run("Measure");
  setResult("Label", nResults-1, "Blue");
  setRGBWeights(1/3, 1/3, 1/3);
  run("Measure");
  setResult("Label", nResults-1, "(R+G+B)/3");
  // weights uses in ImageJ 1.31 and earlier
  setRGBWeights(0.299, 0.587, 0.114);
  run("Measure");
  setResult("Label", nResults-1, "0.299R+0.587G+0.114B");
  updateResults();
}
*/

// 現在選択されている画像のminimum intensity を返す.
function get_min_int(){
  min = 0;
  dummy = 0;
  getStatistics(dummy, dummy, min, dummy, dummy , dummy);
  return min;
}
// 現在選択されている画像のmaximum intensity を返す.
function get_max_int(){
  max = 0;
  dummy = 0;
  getStatistics(dummy, dummy, dummy, max, dummy , dummy);
  return max;
}

// 現在選択されている画像のフィルタ名を取得
// とりあえず Cytell と IX81 でそれっぽいものを選ぶ
function get_filter_name(){
  title = getTitle();
  log_info("title = " + title);
  filter = "";
  if ( matches(title, ".*_w[0-9](NIBA|WIGA|BF|NUA|WBV|NUA|CFP|RFP).*") ){
    filter = replace(title, ".*_w[0-9]", "");
  } else if( matches(title, ".*(Cy5|FITC|Transillumination|Cy3|TexasRed).*$") ){
    if( matches(title, ".*Cy5.*") ){
      filter = "Cy5";
    } else if ( matches(title, ".*FITC.*") ){
      filter = "FITC";
    } else if ( matches(title, ".*Transillumination.*") ){
      filter = "BF";
    } else if ( matches(title, ".*Cy3.*") ){
      filter = "Cy3";
    } else if ( matches(title, ".*TexasRed.*") ){
      filter = "TexasRed";
    } else if ( matches(title, ".*DAPI.*") ){
      filter = "DAPI";
    } else {
      filter = "unmatch0";
    }
  } else {
    filter = "unmatch1";
  }
  return filter;
}

// 現在の選択の周囲の長さを取得する
function get_perimeter(){
  // run("Set Measurements...", " perimeter");
  run("Measure");
  perim = getResult("Perim.", nResults-1);
  // run("Clear Results");
  return perim;
}


// return min & max
function interactiveSetting(image_path){
  setting = newArray(3);
  id = open_image(image_path);
  selectImage(id);
  run("Channels Tool... ");
  waitForUser("Tone Setting",
      "Adjust color of the image by \"Channels\" window.\n" +
      "Click \"OK\", and then this macro will process all images with adjusted color balance above.\n" +
      "(\"Color\" window may be concealed by Image window.\n"
      );
  
  run("Color Balance...");
  waitForUser("Tone Setting",
      "Adjust color balance of an image by \"Color\" window.\n" +
      "Click \"OK\", and then this macro will process all images with adjusted color balance above.\n" +
      "(\"Color\" window may be concealed by Image window.\n" +
      "You can also open the \"Color\" window from Image->Adjust->Color Balance...)\n" +
      "Since this macro will process all image using the same color balance,\n" +
      "adjustment for dark image may cause white-out bright images.\n" +
      "First, try (min, max) = (0, 4095). This setting will produce the raw images captured by CCD camera."
      );
  getMinAndMax(setting[0], setting[1]);

  // color setting.
  run("RGB Color");
  cur_fcolor = getValue("color.foreground");
  cur_frgb   = getValue("rgb.foreground");
  cur_bcolor = getValue("color.background");
  cur_brgb   = getValue("rgb.background");
  log_debug("getValue(\"color.foreground\") = " + cur_fcolor);
  log_debug("getValue(\"rgb.foreground\") = " + cur_frgb);
  log_debug("getValue(\"color.background\") = " + cur_bcolor);
  log_debug("getValue(\"color.background\") = " + cur_brgb);
  setting[2] = cur_frgb;
  close_image(id);
  close_window("Color");
  return setting;
}

function get_config_file(name){
  home_dir = getDirectory("home");
  sep = File.separator;
  imagej_dir1 = home_dir + ".ImageJ";
  imagej_dir2 = home_dir + ".imagej";
  plugin_dir1 = imagej_dir1 + sep + "plugins";
  plugin_dir2 = imagej_dir2 + sep + "plugins";
  config_dir = "";
  if(File.exists(plugin_dir1) ){
    config_dir  = imagej_dir1 + sep + "config" + sep + name;
  } else if(File.exists(plugin_dir2) ){
    config_dir  = imagej_dir2 + sep + "config" + sep + name;
  }  else if(File.exists(imagej_dir1) ){
    config_dir  = imagej_dir1 + sep + "config" + sep + name;
  }  else if(File.exists(imagej_dir2) ){
    config_dir  = imagej_dir2 + sep + "config" + sep + name;
  } else {
    config_dir  = imagej_dir2 + sep + "config" + sep + name;
  }
  if(!File.exists(config_dir)){
    mkdir_p(config_dir);
  }
  config_file = config_dir + sep + "config.txt";
  return config_file;
}

// 設定をロードする関数(単純にファイルから開業区切りで文字列を取るだけ)
function load_config(name){
  config_file = get_config_file(name);

  if(File.exists(config_file)){
    configs = split(File.openAsString(config_file), "\n");
    len = configs.length;
    params = newArray(len);
    
    for(i=0; i < len; i++){
      // 1 == true, 0 == false 等価
      log_info("configs[" + i + "] = " + configs[i]);
      params[i] = configs[i];
    }
    return params;
  }
  return newArray(0);
}

// パラメータ params にarrayで渡すこと
function save_config(name, params){
  config_file = get_config_file(name);
  f = File.open(config_file);
  if(f == false){
    return false;
  }
  log_info("in save_config");

  len = params.length;
  Array.print(params);
  for(i=0; i < len; i++){
    // 1 == true, 0 == false 等価
    log_info("param => " + params[i]);
    print(f, params[i]);
  }
  File.close(f);
}

function get_result_string(){
  headings = split(String.getResultsHeadings);
  lines = "";
  for(row=0; row < nResults; row++){
    id_number = row + 1;
    line = "" + id_number + "\t" + getResultLabel(row);
    for(col=1; col < lengthOf(headings); col++){
      line = line + "\t" +  getResult(headings[col], row);
    }
    if(lines == ""){
      lines = line;
    } else { 
      lines = lines + "\n" + line;
    }
  }
  return lines;
}


macro "Calculate relative intensity..." {
  log_info("HeatMapImage ver 3.1");
  src_dir = getDirectory("Select input directory.");

  // logging
  log_levels = newArray(5);
  log_levels[0] = "debug";
  log_levels[1] = "info";
  log_levels[2] = "warn";
  log_levels[3] = "error";
  log_levels[4] = "fatal";

  // max intensity
  sat_int = newArray(3);
  sat_int[0] = "255";
  sat_int[1] = "4095";
  sat_int[2] = "65534";

  config = load_config("HeatMapImage");
  //config = newArray(0);
  default = newArray("0", "0", "5", "info", ".*BFP.*$", "0", ".*GFP.*$", "0", "200", "120", "0.5", "2.7", "4095");
  if(config.length != default.length){
    config = default;
  }

  Dialog.create("Settings.");
  Dialog.addMessage("Macros can be stopped by ESC");

  Dialog.addCheckbox("Calculate all files in subdirectories?", config[0]);
  Dialog.addCheckbox("Batch mode", config[1]);
  Dialog.addNumber("Interval each step (sec, ignore if bachmode)", config[2]);
  Dialog.addChoice("log level",  log_levels, config[3]);
  Dialog.addString("Target filter image (regular exprssion):", config[4]);
  Dialog.addNumber("Subtract background for Target (ball radius, 0 is OFF, default 0):", config[5]);
  Dialog.addString("Reference filter image (regular expression):", config[6]);
  Dialog.addNumber("Subtract background for Reference (ball radius, 0 is OFF, default 0):", config[7]);
  Dialog.addNumber("Subtract background for Recognition of cell region (ball radius, 0 is OFF, default 200):", config[8]);
  Dialog.addNumber("Minimum value threshold:", config[9]);
  Dialog.addNumber("Coldest relative value for heatmap:", config[10]);
  Dialog.addNumber("Hottest relative value for heatmap:", config[11]);
  Dialog.addChoice("Saturated intensity:",  sat_int, config[12]);

  Dialog.show();

  config[0]  = Dialog.getCheckbox(); // subdir
  config[1]  = Dialog.getCheckbox(); // batch
  config[2]  = Dialog.getNumber(); // interval
  config[3]  = Dialog.getChoice(); // log level
  config[4]  = Dialog.getString(); // target filter
  config[5]  = Dialog.getNumber(); // target ball
  config[6]  = Dialog.getString(); // ref filter
  config[7]  = Dialog.getNumber(); // ref ball
  config[8]  = Dialog.getNumber(); // recog cell ball
  config[9]  = Dialog.getNumber(); // Min-threshold
  config[10]  = Dialog.getNumber(); // Coldest
  config[11] = Dialog.getNumber(); // Hottest
  config[12] = Dialog.getChoice(); // Sat int

  save_config("HeatMapImage", config);

  recursive     = config[0];
  batchmode     = config[1];
  interval      = config[2];
  log_level_str = config[3];
  rel_filter    = config[4];
  rel_ball      = config[5];
  ref_filter    = config[6];
  ref_ball      = config[7];
  rec_ball      = config[8];
  min_threshold = config[9];
  cold          = config[10];
  hot           = config[11];
  //max_int       = parseInt(config[11]);
  max_int       = config[12];

  if(batchmode){
    log_info("batchmode = TRUE");
  } else {
    log_info("batchmode = FALSE");
  }
  if(log_level_str == "debug") {
    log_level = 1;
  } else if(log_level_str == "info") {
    log_level = 2;
  } else if(log_level_str == "warn") {
    log_level = 3;
  } else if(log_level_str == "error") {
    log_level = 4;
  } else if(log_level_str == "fatal") {
    log_level = 5;
  } else {
    log_fatal("log level not found. Enter unexpectd code.");
    return 0;
  }

  log_info("min_threshold = " + min_threshold);
  log_info("max_int = " + max_int);
  log_info("log level = " + log_level);

  file_list = find_recursive_dir(src_dir, recursive);

  if(file_list.length < 1){
    log_info("File not found.");
    return 0;
  }


  setBatchMode(batchmode);
  if(batchmode){
    interval = 0;
  }

  // image separation
  rel_images = newArray(0);
  ref_images = newArray(0);
  for(i=0; i < file_list.length; i++){
    fpath = file_list[i];
    fname = File.getName(fpath);
    if(matches(fname, rel_filter)){
      rel_images = Array.concat(rel_images, fpath);
    } else if(matches(fname, ref_filter)){
      ref_images = Array.concat(ref_images, fpath);
    } else {
      log_info("?? " + fpath);
    }
  }
  if(rel_images.length != ref_images.length){
    log_info("Error: The number mismatch. target files = " + rel_images.length + ", reference files = " + ref_images.length);
    return 0;
  }

  for(i=0; i < rel_images.length; i++){
    rel_image_dir = File.getParent(rel_images[i]);
    ref_image_dir = File.getParent(ref_images[i]);
    if(rel_image_dir == ref_image_dir){
      log_info("rel_image: " + File.getName(rel_images[i]));
      log_info("ref_image: " + File.getName(ref_images[i]));
      calc_rel(rel_images[i], ref_images[i], rel_ball, ref_ball, rec_ball, interval, max_int, min_threshold, cold, hot);
    } else {
      log_info("Files are in different directories.");
      log_info("rel_image: " + rel_images[i]);
      log_info("ref_image: " + ref_images[i]);
    }
  }

  setBatchMode(false);
}

function is_max_exist(int_max){
  area = 0;
  mean = 0;
  min  = 0;
  max  = 0;
  std  = 0;
  histogram = 0;
  getStatistics(area, mean, min, max, std, histogram);
  log_info("max = " + max);
  log_info("int_max = " + int_max);
  if(max != max_int){
    return 0;
  }
  return 1;
}
function is_higher_exist(high){
  area = 0;
  mean = 0;
  min  = 0;
  max  = 0;
  std  = 0;
  histogram = 0;
  getStatistics(area, mean, min, max, std, histogram);
  if(max < high){
    return 0;
  }
  return 1;
}

// rel: 割られる画像(path)
// ref: 割る画像(path)
function calc_rel(relpath, refpath, rel_ball, ref_ball, rec_ball, interval, max_int, min_threshold, cold, hot){
  log_info("Closing all images...");
  close_all_images();
  rel_id = open_image(relpath);
  if(rel_ball > 0){
    selectImage(rel_id);
    log_info("Target image subtract background with " + rel_ball);
    run("Subtract Background...", "rolling=" + rel_ball);
  }
  relmax_id = open_image(relpath); // 4095 領域を検索用
  run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");

  ref_id = open_image(refpath);
  run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
  if(ref_ball > 0){
    selectImage(ref_id);
    log_info("Reference image subtract background with " + ref_ball);
    run("Subtract Background...", "rolling=" + ref_ball);
  }
  refmax_id = open_image(refpath); // 4095 領域を検索用
  run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");

  rec_id    = open_image(refpath); // 細胞領域検出用
  run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
  if(rec_ball > 0){
    selectImage(rec_id);
    log_info("Reference image subtract background with " + rec_ball + " for defining cell region");
    run("Subtract Background...", "rolling=" + rec_ball);
  }

  // 画像のopenの順番(stack)は
  // 1. rel
  // 2. relmax(4095用)
  // 3. ref
  // 4. refmax(4095)用
  // 5. div
  slice_rel = 1;
  slice_relmax = 2;
  slice_ref = 3;
  slice_refmax = 4;
  slice_rec = 5;
  slice_div = 6;
  slice_heat_map = 7;

  imageCalculator("Divide create 32-bit", rel_id, ref_id);
  div_id = getImageID();
  selectImage(div_id);
  //log_info("Info of Div image = " + getImageInfo());

  relname = File.getName(relpath);
  refname = File.getName(refpath);
  directory = File.getParent(relpath);

  // 出力先ファイル名
  dst_path = directory + "/" + replace(refname, "\\.(tif|TIF|tiff|TIFF)$", "_heatmap.png");

  //calc_title = relname + "/" + refname;
  //rename(calc_title);
  //info_wait(interval);
  run("Images to Stack", "name=Stack title=[] use");
  //info_wait(interval);
  selectWindow("Stack");
  stack_id = getImageID();


  // 割る側から4095の領域を除く.
  //info_wait(interval);
  setSlice(slice_refmax); // 4095領域を探すstack
  //info_wait(interval);
  if(is_max_exist(max_int) == 1){
    setThreshold(max_int, max_int);
    run("Create Selection");
  }
  if( selectionType() != -1 ){
    //setSlice(slice_ref); // referenceのスタック
    setSlice(slice_rec); // 細胞認識のスタック
    //info_wait(interval);
    setForegroundColor(0);
    run("Fill", "slice");
  }
  run("Select None");
  resetThreshold();

  // 割られる側の4095の領域を計算対象から外す
  // ために、割られる側の4095の領域と同じ割る側の領域を
  // 0にする.
  // 割られる側の4095領域を探す画像.
  setSlice(slice_relmax);
  //info_wait(interval);
  if(is_max_exist(max_int) == 1){
    setThreshold(max_int, max_int);
    run("Create Selection");
  }
  if( selectionType() != -1 ){
    //info_wait(interval);
    //setSlice(slice_ref);
    setSlice(slice_rec); // 細胞認識のスタック
    setForegroundColor(0);
    //info_wait(interval);
    run("Fill", "slice");
    //info_wait(interval);
    setSlice(slice_rel);
  }
  run("Select None");
  resetThreshold();


  //info_wait(interval);
  //setSlice(slice_ref);
  setSlice(slice_rec);
  // もし、ref_ball == 0 (background subtractionを行っていない
  // 場合) ここで、ball == 200 でバックグラウンドを引いた画像
  // を作り、それを元にthresholdをきる.
  //if( ref_ball == 0){
  //  log_info("Reference image subtract background for threshold.");
  //  run("Subtract Background...", "rolling=200 slice");
  //}
  ////setAutoThreshold("MinError dark");
  //setAutoThreshold("Percentile dark");
  log_info("Recognize objects.");
  if( is_higher_exist(min_threshold) ){
    setThreshold(min_threshold, max_int);
    log_info("Create selection.");
    run("Create Selection");
  }
  //info_wait(interval);
  // 本当はここで小さな領域を除く処理をしたほうが良いが
  // 小さな領域ならそもそも平均への影響はほぼ無いので無視する
  // ヒント: make binary でanalyze particle でサイズ指定すると
  // 小さな領域は除けるようなのでできないことは無いはず. 要検討.
  //info_wait(interval);
  setSlice(slice_div);

  area = 0;
  mean = 0;
  min = 0;
  max = 0;
  getStatistics(area, mean, min, max);
  log_info("area = " + area);
  log_info("mean = " + mean);
  log_info("min = " + min);
  log_info("max = " + max);

  //waitForUser("Check relative intensity before conversion. v = (v - " + cold + ")/(" + hot + " - " + cold + ") * " + max_int);
  info_wait(interval);
  // セレクション領域の値を最小値を0に最大値を255(max_int)に合わせて計算する
  log_info("code=[v=(v - " + cold + ")/(" + hot + " - " + cold + ") * " + 255 + "] slice");
  run("Macro...", "code=[v=(v - " + cold + ")/(" + hot + " - " + cold + ") * " + 255 + "] slice");

  // 8 bitにする.
  run("Conversions...", " ");
  run("8-bit");
  run("Conversions...", "scale");

  info_wait(interval);

  if( selectionType() == -1 ){
    log_warn("No selected regions");
  } else {
    run("Make Inverse");
    info_wait(interval);
    setColor(0);
    fill();
    info_wait(interval);
    run("Select None");
    run("Thermal");
    log_info("output to " + dst_path);
    if(interval == 0 && ! is("Batch Mode") ){
      info_wait(1);
    } else {
      info_wait(interval);
    }
    saveAs("PNG", dst_path);
    info_wait(interval);
  }

  close_all_images();
}
